CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Condition>.*)_XY(?P<XY>.*)_(?P<Channel>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "DAPI.tif")
    Name to assign these images:OrigNucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "FITC1.tif")
    Name to assign these images:OrigGolgi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "CY5.1.tif")
    Name to assign these images:OrigActin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:OrigNucleus
    Name the output image:IllumNucleus
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:OrigGolgi
    Name the output image:IllumGolgi
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:OrigActin
    Name the output image:IllumActin
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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
    Select the input image:OrigNucleus
    Name the output image:CorrNucleus
    Select the illumination function:IllumNucleus
    Select how the illumination function is applied:Divide
    Select the input image:OrigGolgi
    Name the output image:CorrGolgi
    Select the illumination function:IllumGolgi
    Select how the illumination function is applied:Divide
    Select the input image:OrigActin
    Name the output image:CorrActin
    Select the illumination function:IllumActin
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:CorrNucleus
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.4
    Lower and upper bounds on threshold:0.0,0.8
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:Nuclei
    Name the objects to be identified:ActinCytoskeleton
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:CorrActin
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.4
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:CorrGolgi
    Name the primary objects to be identified:Golgi
    Typical diameter of objects, in pixel units (Min,Max):20,250
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
Threshold:[module_num:12|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
    Select the input image:CorrGolgi
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.7
    Lower and upper bounds on threshold:0.0,1
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    Log transform before thresholding?:No
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
ConvertImageToObjects:[module_num:13|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
    Select the input image:Threshold
    Name the output object:ConvertImageToObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

RelateObjects:[module_num:14|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
    Parent objects:ActinCytoskeleton
    Child objects:ConvertImageToObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateGolgi
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
SplitOrMergeObjects:[module_num:15|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
    Select the input objects:ConvertImageToObjects
    Name the new objects:CombinedGolgi
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:ActinCytoskeleton
    Output object type:Disconnected

MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:CombinedGolgi
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:17|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
    Select images to measure:CorrGolgi
    Select objects to measure:CombinedGolgi

MeasureTexture:[module_num:18|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
    Select images to measure:CorrGolgi
    Select objects to measure:CombinedGolgi
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigActin
    Name the output image:OrigOverlayActin
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:magenta
    Select objects to display:ActinCytoskeleton
    Select outline color:Green
    Select objects to display:CombinedGolgi
    Select outline color:yellow
    Select objects to display:FilteredNuclei

OverlayOutlines:[module_num:20|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigGolgi
    Name the output image:OrigOverlayGolgi
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:magenta
    Select objects to display:ActinCytoskeleton
    Select outline color:Green
    Select objects to display:CombinedGolgi
    Select outline color:yellow
    Select objects to display:FilteredNuclei

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayActin
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigActin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OverlayOutlinesOnActin
    Saved file format:tiff
    Output file location:Default Output Folder|Z:\\Verbakel_J\\02 Topography Induced Golgi Changes\\hMSC\\20230419_PhenomeSelectedSurfaces\\CellProfiler\\Experiment_CombinedGolgi\\Overlay Outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayGolgi
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigActin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OverlayOutlinesOnGolgi
    Saved file format:tiff
    Output file location:Default Output Folder|Z:\\Verbakel_J\\02 Topography Induced Golgi Changes\\hMSC\\20230419_PhenomeSelectedSurfaces\\CellProfiler\\Experiment_CombinedGolgi\\Overlay Outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

DisplayDataOnImage:[module_num:23|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
    Display object or image measurements?:Object
    Select the input objects:CombinedGolgi
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OrigOverlayActin
    Text color:cyan
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigActin
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|Z:\\Verbakel_J\\02 Topography Induced Golgi Changes\\hMSC\\20230419_PhenomeSelectedSurfaces\\CellProfiler\\Experiment_CombinedGolgi\\Overlay Outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|Z:\\Verbakel_J\\02 Topography Induced Golgi Changes\\hMSC\\20230419_PhenomeSelectedSurfaces\\CellProfiler\\Experiment_CombinedGolgi
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:
    Overwrite existing files without warning?:Yes
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